<?xml version="1.0" ?>
<PsychoPy2experiment encoding="utf-8" version="2023.1.1">
  <Settings>
    <Param val="3" valType="str" updates="None" name="Audio latency priority"/>
    <Param val="ptb" valType="str" updates="None" name="Audio lib"/>
    <Param val="" valType="str" updates="None" name="Completed URL"/>
    <Param val="auto" valType="str" updates="None" name="Data file delimiter"/>
    <Param val="u'data/%s_%s' % (expInfo['participant'], expName)" valType="code" updates="None" name="Data filename"/>
    <Param val="True" valType="bool" updates="None" name="Enable Escape"/>
    <Param val="" valType="str" updates="None" name="End Message"/>
    <Param val="{'participant': 'f&quot;{randint(0, 999999):06.0f}&quot;'}" valType="code" updates="None" name="Experiment info"/>
    <Param val="True" valType="bool" updates="None" name="Force stereo"/>
    <Param val="True" valType="bool" updates="None" name="Full-screen window"/>
    <Param val="" valType="str" updates="None" name="HTML path"/>
    <Param val="" valType="str" updates="None" name="Incomplete URL"/>
    <Param val="testMonitor" valType="str" updates="None" name="Monitor"/>
    <Param val="[]" valType="list" updates="None" name="Resources"/>
    <Param val="False" valType="bool" updates="None" name="Save csv file"/>
    <Param val="False" valType="bool" updates="None" name="Save excel file"/>
    <Param val="False" valType="bool" updates="None" name="Save hdf5 file"/>
    <Param val="True" valType="bool" updates="None" name="Save log file"/>
    <Param val="True" valType="bool" updates="None" name="Save psydat file"/>
    <Param val="True" valType="bool" updates="None" name="Save wide csv file"/>
    <Param val="1" valType="num" updates="None" name="Screen"/>
    <Param val="True" valType="bool" updates="None" name="Show info dlg"/>
    <Param val="False" valType="bool" updates="None" name="Show mouse"/>
    <Param val="height" valType="str" updates="None" name="Units"/>
    <Param val="" valType="str" updates="None" name="Use version"/>
    <Param val="[1920, 1080]" valType="list" updates="None" name="Window size (pixels)"/>
    <Param val="none" valType="str" updates="None" name="backgroundFit"/>
    <Param val="" valType="str" updates="None" name="backgroundImg"/>
    <Param val="avg" valType="str" updates="None" name="blendMode"/>
    <Param val="$[0,0,0]" valType="color" updates="None" name="color"/>
    <Param val="rgb" valType="str" updates="None" name="colorSpace"/>
    <Param val="100.1.1.1" valType="str" updates="None" name="elAddress"/>
    <Param val="FILTER_LEVEL_2" valType="str" updates="None" name="elDataFiltering"/>
    <Param val="FILTER_LEVEL_OFF" valType="str" updates="None" name="elLiveFiltering"/>
    <Param val="EYELINK 1000 DESKTOP" valType="str" updates="None" name="elModel"/>
    <Param val="ELLIPSE_FIT" valType="str" updates="None" name="elPupilAlgorithm"/>
    <Param val="PUPIL_AREA" valType="str" updates="None" name="elPupilMeasure"/>
    <Param val="1000" valType="num" updates="None" name="elSampleRate"/>
    <Param val="False" valType="bool" updates="None" name="elSimMode"/>
    <Param val="RIGHT_EYE" valType="str" updates="None" name="elTrackEyes"/>
    <Param val="PUPIL_CR_TRACKING" valType="str" updates="None" name="elTrackingMode"/>
    <Param val="browser_transition_test" valType="str" updates="None" name="expName"/>
    <Param val="on Sync" valType="str" updates="None" name="exportHTML"/>
    <Param val="None" valType="str" updates="None" name="eyetracker"/>
    <Param val="127.0.0.1" valType="str" updates="None" name="gpAddress"/>
    <Param val="4242" valType="num" updates="None" name="gpPort"/>
    <Param val="ioHub" valType="str" updates="None" name="keyboardBackend"/>
    <Param val="exp" valType="code" updates="None" name="logging level"/>
    <Param val="('MIDDLE_BUTTON',)" valType="list" updates="None" name="mgBlink"/>
    <Param val="CONTINUOUS" valType="str" updates="None" name="mgMove"/>
    <Param val="0.5" valType="num" updates="None" name="mgSaccade"/>
    <Param val="0.6" valType="num" updates="None" name="plConfidenceThreshold"/>
    <Param val="True" valType="bool" updates="None" name="plPupilCaptureRecordingEnabled"/>
    <Param val="" valType="str" updates="None" name="plPupilCaptureRecordingLocation"/>
    <Param val="127.0.0.1" valType="str" updates="None" name="plPupilRemoteAddress"/>
    <Param val="50020" valType="num" updates="None" name="plPupilRemotePort"/>
    <Param val="1000" valType="num" updates="None" name="plPupilRemoteTimeoutMs"/>
    <Param val="False" valType="bool" updates="None" name="plPupillometryOnly"/>
    <Param val="psychopy_iohub_surface" valType="str" updates="None" name="plSurfaceName"/>
    <Param val="" valType="str" updates="None" name="tbLicenseFile"/>
    <Param val="" valType="str" updates="None" name="tbModel"/>
    <Param val="60" valType="num" updates="None" name="tbSampleRate"/>
    <Param val="" valType="str" updates="None" name="tbSerialNo"/>
    <Param val="pyglet" valType="str" updates="None" name="winBackend"/>
  </Settings>
  <Routines>
    <Routine name="spacebar">
      <KeyboardComponent name="key_resp" plugin="None">
        <Param val="'y','n','left','right','space'" valType="list" updates="constant" name="allowedKeys"/>
        <Param val="" valType="str" updates="constant" name="correctAns"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="True" valType="bool" updates="constant" name="discard previous"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="True" valType="bool" updates="constant" name="forceEndRoutine"/>
        <Param val="key_resp" valType="code" updates="None" name="name"/>
        <Param val="press" valType="str" updates="constant" name="registerOn"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="last key" valType="str" updates="constant" name="store"/>
        <Param val="False" valType="bool" updates="constant" name="storeCorrect"/>
        <Param val="True" valType="bool" updates="constant" name="syncScreenRefresh"/>
      </KeyboardComponent>
      <TextComponent name="text" plugin="None">
        <Param val="white" valType="color" updates="constant" name="color"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="1" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="None" valType="str" updates="constant" name="flip"/>
        <Param val="Open Sans" valType="str" updates="constant" name="font"/>
        <Param val="LTR" valType="str" updates="None" name="languageStyle"/>
        <Param val="0.05" valType="num" updates="constant" name="letterHeight"/>
        <Param val="text" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="0" valType="num" updates="constant" name="ori"/>
        <Param val="(0, 0)" valType="list" updates="constant" name="pos"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="Press space bar." valType="str" updates="constant" name="text"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
        <Param val="" valType="num" updates="constant" name="wrapWidth"/>
      </TextComponent>
    </Routine>
    <Routine name="open_browser">
      <CodeComponent name="browser" plugin="None">
        <Param val="import webbrowser" valType="extendedCode" updates="constant" name="Before Experiment"/>
        <Param val="import * as webbrowser from 'webbrowser';&amp;#10;" valType="extendedCode" updates="constant" name="Before JS Experiment"/>
        <Param val="" valType="extendedCode" updates="constant" name="Begin Experiment"/>
        <Param val="" valType="extendedCode" updates="constant" name="Begin JS Experiment"/>
        <Param val="qualtrics = &quot;https://oregon.qualtrics.com/jfe/form/SV_0kCiLJEnvjydFoW&quot;;&amp;#10;participant = expInfo[&quot;participant&quot;];&amp;#10;url = `${qualtrics}?id=${participant}`;&amp;#10;window.open(url);&amp;#10;" valType="extendedCode" updates="constant" name="Begin JS Routine"/>
        <Param val="# Open new browser window with Qualtrics Big 5 Survey, and participant ID&amp;#10;qualtrics = 'https://oregon.qualtrics.com/jfe/form/SV_0kCiLJEnvjydFoW'&amp;#10;participant = expInfo['participant']&amp;#10;url = f&quot;{qualtrics}?id={participant}&quot;&amp;#10;chrome_path = 'C:/Program Files/Google/Chrome/Application/chrome.exe --start-fullscreen %s'&amp;#10;webbrowser.open(url, new=0, autoraise=True)" valType="extendedCode" updates="constant" name="Begin Routine"/>
        <Param val="Py" valType="str" updates="None" name="Code Type"/>
        <Param val="" valType="extendedCode" updates="constant" name="Each Frame"/>
        <Param val="" valType="extendedCode" updates="constant" name="Each JS Frame"/>
        <Param val="" valType="extendedCode" updates="constant" name="End Experiment"/>
        <Param val="" valType="extendedCode" updates="constant" name="End JS Experiment"/>
        <Param val="" valType="extendedCode" updates="constant" name="End JS Routine"/>
        <Param val="" valType="extendedCode" updates="constant" name="End Routine"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="browser" valType="code" updates="None" name="name"/>
      </CodeComponent>
    </Routine>
  </Routines>
  <Flow>
    <Routine name="spacebar"/>
    <Routine name="open_browser"/>
  </Flow>
</PsychoPy2experiment>
