PsychoPy2experiment version="2023.1.1"
Settings
  Audio lib = ptb
  Data filename = u'data/test_data'
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = staircase
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Before Experiment:
        import os
        import cv2
        import time
        import random
        import numpy as np
        from numpy import inf
        import matplotlib.pyplot as plt
        from matplotlib import animation

        # Initialize Variables
        beta_hi = 0 #check on a way to define these via excel sheet, put in end routine
        beta_lo = 0
        betas = [beta_hi, beta_lo]
        count = 0  # Counts trials within a block. Can be used to tune converge/diverge distance
        mistakes = 0  # Counts staircase mistakes/reversals
        toggle = True  # True means betas converge, False they diverge

        # Track Performance
        performance = []
        pct_correct = 0
        target_beta = 0

        # Converge numbers function
        def converge_diverge(numbers, target, i, converge=True):

            converged_numbers = []  # Clear list

            for number in numbers:
                pseudo_random_shift = .05#round(random.uniform(0, abs(target - number)/3), 2)

                # Adjust beta_hi
                if number >= target:
                    if converge:
                        new_number = number - pseudo_random_shift
                    else:
                        new_number = number + pseudo_random_shift

                # Adjust beta_lo
                elif number <= target:
                    if converge:
                        new_number = number + pseudo_random_shift
                    else:
                        new_number = number - pseudo_random_shift

                converged_numbers.append(new_number)

            return converged_numbers

        # Fractal generator class
        class Generate:
            # Generate 2d or 3d fractal
            def __init__(self, beta=4, seed=117, size=256, dimension=2, preview=False, save=False, method="ifft"):
                # Set Seed
                np.random.seed(seed)
                # Set Size
                size = size+1
                # Set properties
                self.beta = beta
                self.seed = seed
                self.size = size
                self.dimension = dimension

                #Alert related
                assert self.dimension == 2 or self.dimension == 3, "Dimension must be either 2 or 3"
                np.seterr(divide='ignore')

                if dimension == 2 and method == "ifft":
                    # Build power spectrum
                    f = [x/size for x in range(0, int(size/2)+1)] + [x/size for x in range(-int(size/2), 0)]
                    u = np.reshape(f, (size, 1))
                    v = np.reshape(f, (1, size))
                    powerspectrum = (u**2 + v**2)**(-beta/2)
                    powerspectrum[powerspectrum == inf] = powerspectrum[0,1]
                    # Noise and ifft
                    phases = np.random.normal(0, 255, size=[size, size])
                    pattern = np.fft.ifftn(powerspectrum**0.5 * (np.cos(2*np.pi*phases)+1j*np.sin(2*np.pi*phases)))
                    # Normalize result
                    pattern = np.real(pattern)
                    self.pattern = (pattern-np.amin(pattern))/np.amax(pattern-np.amin(pattern))

                if dimension == 3 and method == "ifft":
                    # Build power spectrum
                    f = np.around([x/size for x in range(0, int(size/2)+1)] + [x/size for x in range(-int(size/2), 0)], 4)
                    u = np.reshape(f, (size, 1))
                    v = np.reshape(f, (1, size))
                    w = np.reshape(f, (size, 1, 1))
                    powerspectrum = (u**2 + v**2 + w**2)**(-beta/2)
                    powerspectrum[powerspectrum == inf] = powerspectrum[0,1,0]
                    # Noise and ifft
                    phases = np.random.normal(0, 255, size=[size, size, size])
                    pattern = np.fft.ifftn(powerspectrum**0.5 * (np.cos(2*np.pi*phases)+1j*np.sin(2*np.pi*phases)))
                    # Normalize result
                    pattern = np.real(pattern)
                    self.pattern = (pattern-np.amin(pattern))/np.amax(pattern-np.amin(pattern))

            def previewAnim(self, reps=3, mode='gs'):
                if reps == 1:
                    reps = 2
                for i in range(reps-1):
                    for k in range(self.size):
                        cv2.imshow('Fractal Preview', self.pattern[k, :, :])
                        cv2.waitKey(16)

            def preview2d(self, index=-1, size=256):
                # 2d grayscale and BW previews
                if self.dimension == 2:
                    preview = cv2.resize(self.pattern, [size, size], interpolation=cv2.INTER_AREA)
                    prev_bw = (preview > .5)
                    previews = [preview, prev_bw]
                    for i in range(2):
                        plt.subplot(1, 2, i+1), plt.imshow(previews[i], 'Greys')
                        plt.xticks([]), plt.yticks([])
                    plt.show()
                # 2d slices of 3d fractals for preview
                if self.dimension == 3:
                    if index != -1:
                        assert 0 < index <= 100, "Index must be between 1-100"
                        frame = int((index/100)*self.size)
                    else:
                        frame = -1
                    preview = cv2.resize(self.pattern[frame, :, :], [size, size], interpolation=cv2.INTER_AREA)
                    prev_bw = (preview > .5)
                    previews = [preview, prev_bw]
                    for i in range(2):
                        plt.subplot(1, 2, i+1), plt.imshow(previews[i], 'Greys')
                        plt.xticks([]), plt.yticks([])
                    plt.show()

            def preview3d(self):
                # Check if 3 dimensional, and resize to 64x64x64
                assert self.pattern.ndim == 3, "Fractal must be 3 dimensional"
                prev3d = resize(self.pattern, (64, 64, 64))

                # Create vectors for 3d plot
                z, x, y = prev3d.nonzero()
                color = prev3d.flatten()
                color = color[:]

                #Display 3d Fractal
                fig = plt.figure()
                plt.rcParams["figure.figsize"] = 5, 5
                ax = fig.add_subplot(111, projection='3d')
                ax.scatter(x, y, z, c=color, alpha=1, cmap="Greys")
                plt.show()

            def boxcount(self, threshold=.5, frame=False):
                # 2d box count function
                if self.pattern.ndim == 2 or frame:
                    def count(img, k):
                        box = np.add.reduceat(
                            np.add.reduceat(fractal, np.arange(0, fractal.shape[0], k), axis=0),
                            np.arange(0, fractal.shape[1], k), axis=1)
                        return len(np.where((box > 0) & (box < k*k))[0])

                # 3d box count function
                elif self.pattern.ndim == 3:
                    def count(img, k):
                        reducer = np.add.reduceat(np.add.reduceat(fractal, np.arange(0, fractal.shape[0], k), axis=0),
                                                  np.arange(0, fractal.shape[1], k), axis=1)
                        box = np.add.reduceat(reducer, np.arange(0, fractal.shape[2], k), axis=2)
                        return len(np.where((box > 0) & (box < k*k*k))[0])

                # Threshold and box count
                fractal = (self.pattern < threshold)
                p = min(fractal.shape)
                n = 2**np.floor(np.log(p)/np.log(2))
                n = int(np.log(n)/np.log(2))
                sizes = 2**np.arange(n-1, 0, -1)
                counts = []
                for size in sizes:
                    counts.append(count(fractal, size))
                m, b = np.polyfit(np.log(sizes), np.log(counts), 1)
                return -m

            def avgBoxcount(self):
                # Check if fractal is 3d
                assert self.pattern.ndim == 3, "Average box count is for 3d fractals only."

                def abc(fractal):
                    def count(fractal, k):
                        box = np.add.reduceat(
                            np.add.reduceat(fractal, np.arange(0, fractal.shape[0], k), axis=0),
                            np.arange(0, fractal.shape[1], k), axis=1)
                        return len(np.where((box > 0) & (box < k*k))[0])

                    # Threshold and box count
                    fractal = (self.pattern < .5)
                    p = min(fractal.shape)
                    n = 2**np.floor(np.log(p)/np.log(2))
                    n = int(np.log(n)/np.log(2))
                    sizes = 2**np.arange(n-1, 0, -1)
                    counts = []
                    for size in sizes:
                        counts.append(count(fractal, size))
                    m, b = np.polyfit(np.log(sizes), np.log(counts), 1)
                    return -m

                boxcounts = []

                for i in range(0, len(self.pattern), 3):
                    frame = self.pattern[i, :, :]
                    slope2d = abc(frame)
                    boxcounts.append(slope2d)
                return np.mean(boxcounts)

            def write(self, location="E:/fractals"):

                # Check if root directory exists
                assert os.path.exists(location), "Root directory doesn't exist."

                # Save 2d fractal
                if self.dimension == 2:
                    #folder = f"{location}/{self.seed}/{self.beta}/"
                    #os.mkdir(folder)
                    cv2.imwrite(f"{self.beta}_{self.seed}.png", self.pattern*255)
                if self.dimension == 3:
                    folder = f"{location}/{self.seed}/{self.beta}/"
                    if not os.path.exists(folder):
                        os.makedirs(folder)
                    for i in range(self.size):
                        cv2.imwrite(f"{folder}{self.beta}_{self.seed}_{i:03d}.png", self.pattern[i, :, :]*255)
      Begin Routine:
        # Set up stimuli for 2AFC
        betas = [beta_hi, beta_lo]
        random.shuffle(betas)
        # In case betas are equal, separate them slightly
        if betas[0] == betas[1]:
            betas[0] = betas[0] - .01

        # Generate fractal patterns with random seeds
        fractal_l = Generate(beta=betas[0], seed=random.randint(123, 12300), size=512, dimension=2)
        fractal_r = Generate(beta=betas[1], seed=random.randint(123, 12300), size=512, dimension=2)

        # Save fractals as png to load in as PsychoPy image
        cv2.imwrite(f"stimuli/fractal_left.png", fractal_l.pattern*255)
        cv2.imwrite(f"stimuli/fractal_right.png", fractal_r.pattern*255)

        # Define correct side
        if betas[0] > betas[1]:
            correct = image_l
        else:
            correct = image_r
      End Routine:
        count += 1

        # Nudge betas toward target
        converged_numbers = converge_diverge(betas, target_beta, count, converge=toggle)

        # Name and store beta values
        beta_hi = max(converged_numbers)
        beta_lo = min(converged_numbers)
        thisExp.addData('beta_hi', beta_hi)
        thisExp.addData('beta_lo', beta_lo)

        # Append most recent answer to performance list
        performance.append(mouse.corr[0])

        # If incorrect answer, diverge
        if performance[-1] == 1:
            toggle = False
            mistakes += 1

        # If 3x correct answers, converge
        if np.sum(performance[-3:]) == 0:
            toggle = True

        # Log activity on console
        if toggle == True:
            print("converge")
        else:
            print("diverge")

        # If 3 incorrect reponses, move to next block
        if mistakes == 3:
            count = 0  # Reset trial counter
            mistakes = 0  # reset reversals
            toggle = True
            print(f"failure at {target_beta}")
            break  # Exit stimulus loop and return to beta_blocks loop
    ImageComponent image_l
      image [set every repeat] = stimuli/fractal_left.png
      pos = (-0.33, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1000
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    ImageComponent image_r
      image [set every repeat] = stimuli/fractal_right.png
      pos = (0.33, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1000
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    MouseComponent mouse
      clickable = image_l, image_r
      correctAns = correct
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent accuracy
      letterHeight = 0.05
      pos = (0, -.33)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mistakes
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    TextComponent target_b
      letterHeight = 0.05
      pos = (0, .33)
      startVal [time (s)] = 0.0
      text [set every repeat] = $target_beta
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    TextComponent beta_l
      color = 0.6471, -0.1765, -0.7647
      letterHeight = 0.05
      pos = (-.33, -.33)
      startVal [time (s)] = 0.0
      text [set every repeat] = $round(betas[0], 2)
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    TextComponent beta_r
      color = 0.6471, -0.1765, -0.7647
      letterHeight = 0.05
      pos = (.33, -.33)
      startVal [time (s)] = 0.0
      text [set every repeat] = $round(betas[1], 2)
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  Routine adjust_beta
    CodeComponent increase_beta
      Code Type = Py
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      Begin Routine:
        # Optional: count increase decays convergence factor
        count += 1
        # Nudge betas toward target
        converged_numbers = converge_numbers(betas, target, count)
        # Name and store beta values
        beta_hi = max(converged_numbers)
        beta_lo = min(converged_numbers)
        thisExp.addData('beta_hi', beta_hi)
        thisExp.addData('beta_lo', beta_lo)

        # Append most recent answer to performance list
        performance.append(mouse.corr[0])
  Routine Debrief
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank You!
  Routine init_beta
    CodeComponent set_betas
      Code Type = Auto->JS
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      Begin Routine:
        if count == 0:
            beta_lo = target_beta - 1
            beta_hi = target_beta + 1
  Routine pause
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please press the space bar to move to the next block.
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Flow
  LoopInitiator beta_blocks loopType="TrialHandler"
    conditionsFile = target_betas.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'target_beta': 1},
      {'target_beta': 1.5},
      {'target_beta': 2},
      {'target_beta': 2.5},
      {'target_beta': 3},
      {'target_beta': 3.5},
      {'target_beta': 4},
      {'target_beta': 4.5},
      {'target_beta': 5}]
    Routine init_beta
    LoopInitiator stimulus loopType="TrialHandler"
      loopType = random
      nReps = 100
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      conditions:
        [{'target_beta': 1},
        {'target_beta': 1.5},
        {'target_beta': 2},
        {'target_beta': 2.5},
        {'target_beta': 3},
        {'target_beta': 3.5},
        {'target_beta': 4},
        {'target_beta': 4.5},
        {'target_beta': 5}]
      Routine trial
    LoopTerminator stimulus
    Routine pause
  LoopTerminator beta_blocks
  Routine Debrief
